PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo project
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome_screen
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    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Short Term Memory Experiment

        Press the space bar to continue
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textInstructions
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A series of words will appear, each word lasting for a short vieweing time. Try to remember each word that is presented to you.

        Press space bar to continue.
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_trail
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    TextComponent textStudytrail
      color [set every repeat] = $WordColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine Blank_Screen
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Wait_Screen
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    TextComponent textWaitScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please notify researcher
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    KeyboardComponent keyWaitScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Y_N_Screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The following words are testing your recall. Press either 'Y' for yes or 'N' for N. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrails
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_screen
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = C:/Users/mssaa/Downloads/worditem - Sheet1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('WordItem', 'anxiety'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'depression'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'vexed'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'excited '), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'joyous'), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'content'), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'jealous'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'fascinated'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'ashamed'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'aggravated'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'calm'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'delighted'), ('WordColor', None)])]
    Routine Study_trail
    Routine Blank_Screen
  LoopTerminator trials
  Routine Wait_Screen
  Routine Y_N_Screen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/mssaa/Downloads/worditem - Sheet1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('WordItem', 'anxiety'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'depression'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'vexed'), ('WordColor', 'blue')]),
      OrderedDict([('WordItem', 'excited '), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'joyous'), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'content'), ('WordColor', 'yellow')]),
      OrderedDict([('WordItem', 'jealous'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'fascinated'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'ashamed'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'aggravated'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'calm'), ('WordColor', None)]),
      OrderedDict([('WordItem', 'delighted'), ('WordColor', None)])]
    Routine StudyTrails
  LoopTerminator trials_2
