PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Motor Sequence
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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  Routine random_2
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    PolygonComponent Fixation_2
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent line1_2
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3_2
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4_2
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe_2
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/mssaa/Downloads/Sequence_Conditions - Sheet1.csv
    loopType = sequential
    nReps = 200
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/mssaa/Downloads/Sequence_Conditions - Sheet1.csv
    loopType = fullRandom
    nReps = 400
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine random_2
  LoopTerminator trials_2
